# Generated by Configurator on Wed Dec 16 15:57:57 GMT 2020

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM1,SerialManager,COM1
Device,COM3,SerialManager,COM3
Device,COM14,SerialManager,COM14
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,NIMultiAnalogOutHub,NIMultiAnalog,NIMultiAnalogOutHub
Device,Pockels,NIMultiAnalog,NIMultiAnalogOut-Dev2/ao0
Device,561 on/off,NIMultiAnalog,NIMultiAnalogOut-Dev2/ao1
Device,561nm power,NIMultiAnalog,NIMultiAnalogOut-Dev2/ao2
Device,405nm,NIMultiAnalog,NIMultiAnalogOut-Dev2/ao3
Device,488nm on/off,NIMultiAnalog,NIMultiAnalogOut-Dev2/ao4
Device,515 power,NIMultiAnalog,NIMultiAnalogOut-Dev2/ao5
Device,NIMultiAnalogOut-Dev2/ao7,NIMultiAnalog,NIMultiAnalogOut-Dev2/ao7
Device,488nm USB,Omicron,Omicron USB
Device,405nm USB,Omicron,Omicron USB
Device,638nm USB,Omicron,Omicron USB
Device,515nm USB,Omicron,Omicron USB
Device,XYStage,Prior,XYStage
Device,Filter wheel,Prior,Wheel-1
Device,Brightfield shutter,Prior,Shutter-1
Device,NanoScanZ,Prior,NanoScanZ
Device,ZStage,Prior,ZStage
Device,638nm on/off,NIMultiAnalog,NIMultiAnalogOut-Dev2/ao6
Device,488nm Shutter,Utilities,DA Shutter
Device,515nm Shutter,Utilities,DA Shutter
Device,561nm Shutter,Utilities,DA Shutter
Device,638nm Shutter,Utilities,DA Shutter
Device,405nm Shutter,Utilities,DA Shutter
Device,DHub,DemoCamera,DHub
Device,DObjective,DemoCamera,DObjective
Device,DOptovar,DemoCamera,DOptovar

# Pre-init settings for devices
Property,NIMultiAnalogOutHub,Device,Dev2
Property,NIMultiAnalogOutHub,MaxSequenceLength,1024
Property,Pockels,MaxVolts,5.0000
Property,Pockels,MinVolts,0.0000
Property,Pockels,Sequencing,Use hub setting
Property,561 on/off,MaxVolts,5.0000
Property,561 on/off,MinVolts,0.0000
Property,561 on/off,Sequencing,Use hub setting
Property,561nm power,MaxVolts,5.0000
Property,561nm power,MinVolts,0.0000
Property,561nm power,Sequencing,Use hub setting
Property,405nm,MaxVolts,5.0000
Property,405nm,MinVolts,0.0000
Property,405nm,Sequencing,Use hub setting
Property,488nm on/off,MaxVolts,5.0000
Property,488nm on/off,MinVolts,0.0000
Property,488nm on/off,Sequencing,Use hub setting
Property,515 power,MaxVolts,5.0000
Property,515 power,MinVolts,0.0000
Property,515 power,Sequencing,Use hub setting
Property,NIMultiAnalogOut-Dev2/ao7,MaxVolts,5.0000
Property,NIMultiAnalogOut-Dev2/ao7,MinVolts,0.0000
Property,NIMultiAnalogOut-Dev2/ao7,Sequencing,Use hub setting
Property,488nm USB,Devices,LuxX (488nm - 100mW) [1407-17]
Property,405nm USB,Devices,LuxX (405nm - 120mW) [1407-16]
Property,638nm USB,Devices,LuxX (638nm - 100mW) [1407-19]
Property,515nm USB,Devices,LuxX (515nm - 100mW) [1407-18]
Property,XYStage,Port,COM3
Property,Filter wheel,Port,COM3
Property,Brightfield shutter,Port,COM3
Property,NanoScanZ,Port,COM14
Property,ZStage,Port,COM3
Property,638nm on/off,MaxVolts,5.0000
Property,638nm on/off,MinVolts,0.0000
Property,638nm on/off,Sequencing,Use hub setting
Property,DOptovar,Freely variable or fixed magnification,Fixed
Property,DOptovar,High Position Magnification,1.6000

# Pre-init settings for COM ports
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,9600
Property,COM5,DataBits,8
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Fast USB to Serial,Disable
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,9600
Property,COM1,DataBits,8
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Fast USB to Serial,Disable
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,9600
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,COM14,AnswerTimeout,500.0000
Property,COM14,BaudRate,9600
Property,COM14,DataBits,8
Property,COM14,DelayBetweenCharsMs,0.0000
Property,COM14,Fast USB to Serial,Disable
Property,COM14,Handshaking,Off
Property,COM14,Parity,None
Property,COM14,StopBits,1
Property,COM14,Verbose,1

# Hub (parent) references
Parent,Pockels,NIMultiAnalogOutHub
Parent,561 on/off,NIMultiAnalogOutHub
Parent,561nm power,NIMultiAnalogOutHub
Parent,405nm,NIMultiAnalogOutHub
Parent,488nm on/off,NIMultiAnalogOutHub
Parent,515 power,NIMultiAnalogOutHub
Parent,NIMultiAnalogOut-Dev2/ao7,NIMultiAnalogOutHub
Parent,638nm on/off,NIMultiAnalogOutHub
Parent,DObjective,DHub
Parent,DOptovar,DHub

# Initialize
Property,Core,Initialize,1

# Delays
Delay,XYStage,100.0
Delay,Filter wheel,50.0
Delay,Brightfield shutter,50.0

# Focus directions
FocusDirection,NanoScanZ,0
FocusDirection,ZStage,1

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Shutter,Brightfield shutter
Property,Core,Focus,NanoScanZ
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Filter wheel
Label,Filter wheel,9,Filter-10
Label,Filter wheel,8,Filter-9
Label,Filter wheel,7,Filter-8
Label,Filter wheel,6,Filter-7
Label,Filter wheel,5,Filter-6
Label,Filter wheel,4,Filter-5
Label,Filter wheel,3,Chroma ET655LP
Label,Filter wheel,2,Chroma ET595/50
Label,Filter wheel,1,Chroma ET525/50
Label,Filter wheel,0,Chroma ET450/50
# DObjective
Label,DObjective,5,Objective-F
Label,DObjective,4,Objective-E
Label,DObjective,3,Objective-D
Label,DObjective,2,Objective-C
Label,DObjective,1,10x
Label,DObjective,0,40x

# Configuration presets
# Group: 488nm
# Preset: Power
ConfigGroup,488nm,Power,488nm USB,Power Setpoint,20.8000


# Group: 515nm
# Preset: NewPreset
ConfigGroup,515nm,NewPreset,515nm USB,Power Setpoint,0.0000


# Group: 638nm
# Preset: NewPreset
ConfigGroup,638nm,NewPreset,638nm USB,Power Setpoint,25.5000


# Group: SLM Reset
# Preset: HIGH
ConfigGroup,SLM Reset,HIGH,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],HIGH

# Preset: EXPOSURE
ConfigGroup,SLM Reset,EXPOSURE,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],EXPOSURE

# Preset: TRIGGER READY
ConfigGroup,SLM Reset,TRIGGER READY,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],TRIGGER READY

# Preset: LOW
ConfigGroup,SLM Reset,LOW,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],LOW

# Preset: PROGRAMABLE
ConfigGroup,SLM Reset,PROGRAMABLE,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],PROGRAMABLE


# Group: Shutters
# Preset: 405nm
ConfigGroup,Shutters,405nm,Filter wheel,Label,Chroma ET450/50
ConfigGroup,Shutters,405nm,Core,Shutter,405nm Shutter

# Preset: 638nm
ConfigGroup,Shutters,638nm,Core,Shutter,638nm Shutter
ConfigGroup,Shutters,638nm,Filter wheel,Label,Chroma ET655LP

# Preset: Brightfield shutter
ConfigGroup,Shutters,Brightfield shutter,Core,Shutter,Brightfield shutter
ConfigGroup,Shutters,Brightfield shutter,Filter wheel,Label,Chroma ET525/50

# Preset: 515nm
ConfigGroup,Shutters,515nm,Core,Shutter,515nm Shutter
ConfigGroup,Shutters,515nm,Filter wheel,Label,Chroma ET595/50

# Preset: 561nm
ConfigGroup,Shutters,561nm,Filter wheel,Label,Chroma ET595/50
ConfigGroup,Shutters,561nm,Core,Shutter,561nm Shutter

# Preset: 488nm
ConfigGroup,Shutters,488nm,Core,Shutter,488nm Shutter
ConfigGroup,Shutters,488nm,Filter wheel,Label,Chroma ET525/50


# Group: Channel

# Group: System
# Preset: Startup


# Group: 405nm
# Preset: NewPreset
ConfigGroup,405nm,NewPreset,405nm USB,Power Setpoint,0.0000


# Group: 561nm
# Preset: NewPreset
ConfigGroup,561nm,NewPreset,561nm power,Voltage,0.0000


# Group: Startup
# Preset: Reset RO
ConfigGroup,Startup,Reset RO,HamamatsuHam_DCAM,OUTPUT TRIGGER DELAY UNITS,MILLISECONDS
ConfigGroup,Startup,Reset RO,HamamatsuHam_DCAM,OUTPUT TRIGGER DELAY[0],0.0000
ConfigGroup,Startup,Reset RO,HamamatsuHam_DCAM,OUTPUT TRIGGER DELAY[1],0.0000
ConfigGroup,Startup,Reset RO,HamamatsuHam_DCAM,OUTPUT TRIGGER DELAY[2],0.0000
ConfigGroup,Startup,Reset RO,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],EXPOSURE
ConfigGroup,Startup,Reset RO,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],EXPOSURE
ConfigGroup,Startup,Reset RO,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],LOW
ConfigGroup,Startup,Reset RO,HamamatsuHam_DCAM,OUTPUT TRIGGER PERIOD UNITS,MILLISECONDS
ConfigGroup,Startup,Reset RO,HamamatsuHam_DCAM,OUTPUT TRIGGER PERIOD[0],1.0000
ConfigGroup,Startup,Reset RO,HamamatsuHam_DCAM,OUTPUT TRIGGER PERIOD[1],1.0000
ConfigGroup,Startup,Reset RO,HamamatsuHam_DCAM,OUTPUT TRIGGER PERIOD[2],10.0000
ConfigGroup,Startup,Reset RO,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,Startup,Reset RO,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],POSITIVE
ConfigGroup,Startup,Reset RO,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],NEGATIVE
ConfigGroup,Startup,Reset RO,HamamatsuHam_DCAM,PixelType,16bit
ConfigGroup,Startup,Reset RO,488nm USB,Operating Mode,ACC Mode - Analog modulation active
ConfigGroup,Startup,Reset RO,488nm USB,Power,Off
ConfigGroup,Startup,Reset RO,488nm USB,Power Setpoint,0.0000
ConfigGroup,Startup,Reset RO,405nm USB,Operating Mode,ACC Mode - Analog modulation active
ConfigGroup,Startup,Reset RO,405nm USB,Power,Off
ConfigGroup,Startup,Reset RO,405nm USB,Power Setpoint,0.0000
ConfigGroup,Startup,Reset RO,638nm USB,Operating Mode,ACC Mode - Analog modulation active
ConfigGroup,Startup,Reset RO,638nm USB,Power,Off
ConfigGroup,Startup,Reset RO,638nm USB,Power Setpoint,0.0000
ConfigGroup,Startup,Reset RO,488nm Shutter,DA Device,Pockels
ConfigGroup,Startup,Reset RO,515nm Shutter,DA Device,Pockels
ConfigGroup,Startup,Reset RO,561nm Shutter,DA Device,Pockels
ConfigGroup,Startup,Reset RO,638nm Shutter,DA Device,Pockels
ConfigGroup,Startup,Reset RO,561 on/off,Voltage,0.0000
ConfigGroup,Startup,Reset RO,488nm on/off,Voltage,0.0000
ConfigGroup,Startup,Reset RO,638nm on/off,Voltage,0.0000
ConfigGroup,Startup,Reset RO,515 power,Voltage,0.0000
ConfigGroup,Startup,Reset RO,405nm,Voltage,5.0000
ConfigGroup,Startup,Reset RO,405nm Shutter,DA Device,405nm

# Preset: Init
ConfigGroup,Startup,Init,HamamatsuHam_DCAM,OUTPUT TRIGGER DELAY UNITS,SECONDS
ConfigGroup,Startup,Init,HamamatsuHam_DCAM,OUTPUT TRIGGER DELAY[0],0.0000
ConfigGroup,Startup,Init,HamamatsuHam_DCAM,OUTPUT TRIGGER DELAY[1],0.0000
ConfigGroup,Startup,Init,HamamatsuHam_DCAM,OUTPUT TRIGGER DELAY[2],0.0000
ConfigGroup,Startup,Init,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],EXPOSURE
ConfigGroup,Startup,Init,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],EXPOSURE
ConfigGroup,Startup,Init,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],HIGH
ConfigGroup,Startup,Init,HamamatsuHam_DCAM,OUTPUT TRIGGER PERIOD UNITS,SECONDS
ConfigGroup,Startup,Init,HamamatsuHam_DCAM,OUTPUT TRIGGER PERIOD[0],0.0010
ConfigGroup,Startup,Init,HamamatsuHam_DCAM,OUTPUT TRIGGER PERIOD[1],0.0010
ConfigGroup,Startup,Init,HamamatsuHam_DCAM,OUTPUT TRIGGER PERIOD[2],0.0010
ConfigGroup,Startup,Init,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,Startup,Init,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],POSITIVE
ConfigGroup,Startup,Init,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],POSITIVE
ConfigGroup,Startup,Init,HamamatsuHam_DCAM,PixelType,16bit
ConfigGroup,Startup,Init,488nm USB,Operating Mode,ACC Mode - CW only- no modulation active
ConfigGroup,Startup,Init,488nm USB,Power,On
ConfigGroup,Startup,Init,488nm USB,Power Setpoint,0.0000
ConfigGroup,Startup,Init,405nm USB,Operating Mode,ACC Mode - CW only- no modulation active
ConfigGroup,Startup,Init,405nm USB,Power,On
ConfigGroup,Startup,Init,405nm USB,Power Setpoint,0.0000
ConfigGroup,Startup,Init,638nm USB,Operating Mode,ACC Mode - CW only- no modulation active
ConfigGroup,Startup,Init,638nm USB,Power,On
ConfigGroup,Startup,Init,638nm USB,Power Setpoint,0.0000
ConfigGroup,Startup,Init,488nm Shutter,DA Device,488nm on/off
ConfigGroup,Startup,Init,515nm Shutter,DA Device,515 power
ConfigGroup,Startup,Init,561nm Shutter,DA Device,561 on/off
ConfigGroup,Startup,Init,638nm Shutter,DA Device,638nm on/off
ConfigGroup,Startup,Init,561 on/off,Voltage,3.3000
ConfigGroup,Startup,Init,488nm on/off,Voltage,3.3000
ConfigGroup,Startup,Init,638nm on/off,Voltage,3.3000
ConfigGroup,Startup,Init,515nm USB,Operating Mode,ACC Mode - CW only- no modulation active
ConfigGroup,Startup,Init,515nm USB,Power,On
ConfigGroup,Startup,Init,515nm USB,Power Setpoint,0.0000
ConfigGroup,Startup,Init,515 power,Voltage,3.3000
ConfigGroup,Startup,Init,405nm,Voltage,5.0000
ConfigGroup,Startup,Init,405nm Shutter,DA Device,405nm



# PixelSize settings
# Resolution preset: 40x-1.6x
ConfigPixelSize,40x-1.6x,DObjective,Label,40x
ConfigPixelSize,40x-1.6x,DOptovar,Position,1.6x
PixelSize_um,40x-1.6x,0.0677


